PsychoPy2experiment version="2023.2.3"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Resources = ['name_stim.csv', 'resources/I0001.png', 'resources/I0002.png', 'resources/I0003.png', 'resources/I0004.png', 'resources/I0005.png', 'resources/I0006.png', 'resources/I0007.png', 'resources/I0008.png', 'resources/I0009.png', 'resources/I0010.png', 'resources/I0011.png', 'resources/I0012.png', 'resources/I0013.png', 'resources/I0014.png', 'resources/I0015.png', 'resources/I0016.png', 'resources/I0017.png', 'resources/I0018.png', 'resources/I0019.png', 'resources/I0020.png', 'resources/I0021.png', 'resources/I0022.png', 'resources/I0023.png', 'resources/I0024.png', 'resources/I0025.png', 'resources/I0026.png', 'resources/I0027.png', 'resources/I0028.png', 'resources/I0029.png', 'resources/I0030.png', 'resources/I0031.png', 'resources/I0032.png', 'resources/I0033.png', 'resources/I0034.png', 'resources/I0035.png', 'resources/I0036.png', 'resources/I0037.png', 'resources/I0038.png', 'resources/I0039.png', 'resources/I0040.png', 'resources/I0041.png', 'resources/I0042.png', 'resources/I0043.png', 'resources/I0044.png', 'resources/I0045.png', 'resources/I0046.png', 'resources/I0047.png', 'resources/I0048.png', 'resources/S0001.png', 'resources/S0002.png', 'resources/S0003.png', 'resources/S0004.png', 'resources/S0005.png', 'resources/S0006.png', 'resources/S0007.png', 'resources/S0008.png', 'resources/S0009.png', 'resources/S0010.png', 'resources/S0011.png', 'resources/S0012.png', 'resources/S0013.png', 'resources/S0014.png', 'resources/S0015.png', 'resources/S0016.png', 'resources/S0017.png', 'resources/S0018.png', 'resources/S0019.png', 'resources/S0020.png', 'resources/S0021.png', 'resources/S0022.png', 'resources/S0023.png', 'resources/S0024.png', 'resources/S0025.png', 'resources/S0026.png', 'resources/S0027.png', 'resources/S0028.png', 'resources/S0029.png', 'resources/S0030.png', 'resources/S0031.png', 'resources/S0032.png', 'resources/S0033.png', 'resources/S0034.png', 'resources/S0035.png', 'resources/S0036.png', 'resources/S0037.png', 'resources/S0038.png', 'resources/S0039.png', 'resources/S0040.png', 'resources/S0041.png', 'resources/S0042.png', 'resources/S0043.png', 'resources/S0044.png', 'resources/S0045.png', 'resources/S0046.png', 'resources/S0047.png', 'resources/S0048.png', 'resources/S0049.png', 'resources/S0050.png', 'resources/S0051.png', 'resources/S0052.png', 'resources/S0053.png', 'resources/S0054.png', 'resources/S0055.png', 'resources/S0056.png', 'resources/S0057.png', 'resources/S0058.png', 'resources/S0059.png', 'resources/S0060.png', 'resources/S0061.png', 'resources/S0062.png', 'resources/S0063.png', 'resources/S0064.png', 'resources/S0065.png', 'resources/S0066.png', 'resources/S0067.png', 'resources/S0068.png', 'resources/S0069.png', 'resources/S0070.png', 'resources/S0071.png', 'resources/S0072.png', 'resources/S0073.png', 'resources/S0074.png', 'resources/S0075.png', 'resources/S0076.png', 'resources/S0077.png', 'resources/S0078.png', 'resources/S0079.png', 'resources/S0084.png', 'resources/S0085.png', 'resources/S0086.png', 'resources/S0087.png', 'resources/S0088.png', 'resources/S0089.png', 'resources/S0090.png', 'resources/S0091.png', 'resources/S0092.png', 'resources/S0093.png', 'resources/S0094.png', 'resources/S0095.png', 'resources/S0096.png', 'resources/S0097.png', 'resources/S0098.png', 'resources/S0099.png', 'resources/S0100.png', 'resources/U0001.png', 'resources/U0002.png', 'resources/U0003.png', 'resources/U0004.png', 'resources/U0005.png', 'resources/U0006.png', 'resources/U0007.png', 'resources/U0008.png', 'resources/U0009.png', 'resources/U0010.png', 'resources/U0011.png', 'resources/U0012.png', 'resources/U0013.png', 'resources/U0014.png', 'resources/U0015.png', 'resources/U0016.png', 'resources/U0017.png', 'resources/U0018.png', 'resources/U0019.png', 'resources/U0020.png', 'resources/U0021.png', 'resources/U0022.png', 'resources/U0023.png', 'resources/U0024.png', 'resources/U0025.png', 'resources/U0026.png', 'resources/U0027.png', 'resources/U0028.png', 'resources/U0029.png', 'resources/U0030.png', 'resources/U0031.png', 'resources/U0032.png', 'resources/U0033.png', 'resources/U0034.png', 'resources/U0035.png', 'resources/U0036.png', 'resources/U0037.png', 'resources/U0038.png', 'resources/U0039.png', 'resources/U0040.png', 'resources/U0041.png', 'resources/U0042.png', 'resources/U0043.png', 'resources/U0044.png', 'resources/U0045.png', 'resources/U0046.png', 'resources/U0047.png', 'resources/U0048.png']
  Screen = 1
  Units = height
  Window size (pixels) = [1440, 900]
  expName = 2AFC_MF_NT1
  keyboardBackend = Pyglet
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Routines
  Routine Instru2
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    TextComponent Instru_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      wrapWidth = 1.5
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      text:
        Placez l'index de votre main directrice sur la touche g,
        et le majeur sur le touche h

        - Si vous pensez que l'image affichée représente un visage :
        Appuyez sur la touche "g" avec l'index

        - Si vous pensez que l'image affichée ne représente pas un visage :
        Appuyez sur la touche "h" avec le majeur

        Appuyez sur la barre d'espace pour continuer...
    KeyboardComponent key_instru_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0
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  Routine Instru1
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    TextComponent Instru_1
      letterHeight = 0.05
      startVal [time (s)] = 0
      wrapWidth = 1.5
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      text:
        Bienvenu-e et merci d'avoir accepté de participer à l'expérimentation !

        Des chiffres vont apparaître au milieu de l'écran.

        À chaque fois qu'un chiffre apparaît, appuyez sur la barre d'espace, SAUF pour le chiffre 3 !

        Appuyez sur la barre d'espace pour continuer...
    KeyboardComponent key_instru_1
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0
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  Routine EndScreen
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    TextComponent TextEnd
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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      text:
        Bravo, vous avez terminé le test!

        Merci d'avoir participé à cette étude!

        Vous pouvez appeler l'expérimentateur.
  Routine TrainingTrial
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    CodeComponent codeCurrImg
      Code Type = Auto->JS
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      Begin Experiment:
        ntrial = 0
      Begin Routine:
        # pick random digit
        currDigit = training_digits[training_order[ntrial]]
        # pick random duration
        currDuration = training_duration[training_order[ntrial]]
        # is target or not
        if currDigit != 3 :
            currIsTarget = "Go"
        else :
            currIsTarget = "NoGo"

        # Save Exp Data
        thisExp.addData('train_digit', currDigit)
        thisExp.addData('train_duration', currDuration)
        thisExp.addData('train_istarget', currIsTarget)
      End Routine:
        ntrial += 1
    TextComponent displayDigit
      letterHeight = 0.10
      startVal [time (s)] = 0
      stopVal [duration (s)] = $currDuration
      text [set every repeat] = $currDigit
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    KeyboardComponent key_resp_trainMF
      allowedKeys [set every repeat] = 'space'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $currDuration
      storeCorrect = True
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  Routine StartExpe
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    TextComponent textStartExp
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      wrapWidth = 1.5
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      text:
        Bravo! Vous avez terminé l'entraînement.
        Vous allez pouvoir commencer la réelle expérience.

        Gardez en tête :
        À chaque fois qu'un chiffre apparaît, appuyez sur la barre d'espace, SAUF pour le chiffre 3 !

        Appuyez sur la barre d'espace pour commencer l'experience...
    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent pause_beforestart
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    CodeComponent set_blockto0
      Code Type = Auto->JS
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      Begin Routine:
        current_block = 0
  Routine SecondBlock
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  Routine ThirdBlock
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  Routine FourthBlock
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  Routine FeedbackTraining
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    CodeComponent codeFeedback
      Code Type = Auto->JS
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      Begin Routine:
        if currIsTarget == 'Go' and key_resp_trainMF.keys == 'space' :
            feedback_text = "Bravo !"
        elif currIsTarget == 'NoGo' and key_resp_trainMF.keys == 'space' :
            feedback_text = "Attention!\n\nIl ne faut pas appuyer quand c'est le chiffre 3"
        elif currIsTarget == 'NoGo' and key_resp_trainMF.keys == None:
            feedback_text = "Bravo de vous être retenu·e!"
        else :
            feedback_text = "N'oubliez pas d'appuyer sur la barre espace!"
    TextComponent textFeedback
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text [set every repeat] = $feedback_text
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  Routine PauseSecondBlock
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    TextComponent textPSB
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Bravo! Vous avez terminé le second bloc!

        Vous avez fait la moitié, plus que deux.

        Vous pouvez vous reposer un instant si vous le souhaitez.

        < Appuyez sur la barre d'espace pour passer au second bloc... >
    KeyboardComponent key_respPSB
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine PauseThirdBlock
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    TextComponent textPTB
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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      text:
        Bravo! Vous avez terminé le troisième bloc!

        Tenez bon, plus qu'un!

        Vous pouvez vous reposer un instant si vous le souhaitez.

        < Appuyez sur la barre d'espace pour passer au second bloc... >
    KeyboardComponent key_respPTB
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine TrialBlock
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    CodeComponent codeTrial
      Code Type = Auto->JS
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      Begin Routine:
        #Add needed informations to data_sheet:
        currDigit = trial_digits[trial_order[current_trial]]
        currDuration = trialDurations[trial_order[current_trial]]
        if currDigit != 3 :
            currIsTarget = 'Go'
        else :
            currIsTarget = 'NoGo'

        #block, trial & image number
        thisExp.addData('nBlock', current_block)
        thisExp.addData('nTrial', current_trial)
        thisExp.addData('digit', currDigit)
        #duration of presentation
        thisExp.addData('trial_duration_digit', currDuration)
        #trial_img name, type & istarget
        thisExp.addData('trial_isTarget', currIsTarget)
      End Routine:
        current_trial += 1
    TextComponent text
      letterHeight = 0.10
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $currDuration
      text [set every repeat] = $currDigit
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    KeyboardComponent key_resp_testMF
      allowedKeys [set every repeat] = 'space'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $currDuration
      storeCorrect = True
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  Routine PauseBlockTrial
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    CodeComponent codePauseBlock
      Code Type = Auto->JS
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      Begin Routine:
        if current_block == 0 :
            txt_PauseBlock = "Bravo! Vous avez terminé le bloc n°1 !\n\nVous pouvez vous reposer un instant si vous le souhaitez.\n\n< Appuyez sur la barre d'espace pour passer au bloc suivant... >"
        elif current_block == 1 :
            txt_PauseBlock = "Bravo! Vous avez terminé le bloc n°2 !\n\nVous avez fait la moitié, reposez-vous un instant si vous le souhaitez.\n\n< Appuyez sur la barre d'espace pour passer au bloc suivant... >"
        elif current_block == 2 :
            txt_PauseBlock = "Bravo! Vous avez terminé le bloc n°3 !\n\nVous y êtes presques, reposez-vous un instant si vous le souhaitez.\n\n< Appuyez sur la barre d'espace pour passer au bloc suivant... >"
        elif current_block == 3 :
            txt_PauseBlock = "Bravo! Vous avez terminé le bloc n°4 !\n\nVous avez terminé tous les blocs!\n\n< Appuyez sur la barre d'espace pour passer à la suite... >"
      End Routine:
        current_block += 1
    TextComponent TxtPauseBlock
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $txt_PauseBlock
      wrapWidth = 1.5
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    KeyboardComponent key_respPauseBlock
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine SetBlock
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    CodeComponent codeSetBlock
      Code Type = Auto->JS
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      Begin Routine:
        #Define ≠ len of trials in a list
        listDurTrial = []

        for i in range(nTrial - 1) :
            listDurTrial.append(randchoice(durTrial))

        listDurTrial.append(randchoice(doubledurTrial))

        #Create order variable to shuffle'em
        order_durTrial = []
        # nTrial = len(listDurTrial)
        for i in range(nTrial):
            order_durTrial.append(i)
        shuffle(order_durTrial)
        #follow n_trial
  Routine Probe2_2
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  Routine Probe2_3
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  Routine SetTrial
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    CodeComponent codeSetTrial
      Code Type = Auto->JS
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      Begin Routine:
        trialDurations = []
        current_trial = 0

        durCurTrial = listDurTrial[order_durTrial[current_trial]]

        while sum(trialDurations) < durCurTrial:
            trialDurations.append(randchoice(durImg))
        nDigits = len(trialDurations)

        trial_digits = []
        for i in range(nDigits) :
            if i < perGo * nDigits :
                trial_digits.append(randchoice(go_digits))
            else :
                trial_digits.append(nogo_digit)
        trial_order = [i for i in range(nDigits)]
        shuffle(trial_order)
  Routine ImgLoader
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    CodeComponent codeImgLoad
      Code Type = Auto->JS
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      Begin Experiment:
        digits = [i+1 for i in range(9)]
        isTarget = ["nogo", "nogo", "go", "nogo", "nogo", "nogo", "nogo", "nogo", "nogo"]
  Routine SetTrial_2
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  Routine Pause
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    TextComponent PausePrep3
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
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      text:
        Préparez-vous à commencer

        3
    TextComponent PausePrep2
      letterHeight = 0.05
      startVal [time (s)] = 1
      stopVal [duration (s)] = 1.0
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      text:
        Préparez-vous à commencer

        2
    TextComponent PausePrep1
      letterHeight = 0.05
      startVal [time (s)] = 2
      stopVal [duration (s)] = 1.0
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      text:
        Préparez-vous à commencer

        1
  Routine Instru3
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    TextComponent Instru_3
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      wrapWidth = 1.5
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      text:
        Vous ne pouvez pas faire de pause en milieu de bloc. Je vous prie de bien vouloir attendre la fin d'un bloc.

        Vous aurez alors la possibilité de prendre une courte pause avant de reprendre.

        Soyez le plus rapide et le plus précis possible!
        Bonne Chance.

        Appuyez sur la barre d'espace pour continuer...
    KeyboardComponent key_instru_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Volition
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    CodeComponent codeProbe2
      Code Type = Auto->JS
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      Begin Routine:
        thisExp.addData('Probe2',"Volition")
    TextComponent textProbe2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      wrapWidth = 1.5
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      text:
        Votre état mental était-il volontaire:

        1. Oui

        2. Non
    KeyboardComponent key_respProbe2
      allowedKeys = '1', '2'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Awareness
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    CodeComponent codeProbe3
      Code Type = Auto->JS
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      Begin Routine:
        thisExp.addData('Probe3',"Awareness")
      End Routine:
        current_trial += 1
    TextComponent textProbe3
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      wrapWidth = 1.5
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      text:
        Vous êtes-vous rendu compte de votre état mental avant l'interruption ? :

        1. Extrêmement

        2. Très

        3. Un peu

        4. Très peu

        5. Presque pas

        6. Pas du tout
    KeyboardComponent key_respProbe3
      allowedKeys = '1','2','3','4','5','6'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Positivité
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    CodeComponent codeProbe5
      Code Type = Auto->JS
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      Begin Routine:
        thisExp.addData('Probe5',"Positivity")
    TextComponent textProbe5
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      wrapWidth = 1.5
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      text:
        Vos pensées étaient :

        1. Très positives

        2. Positives

        3. Un peu positives

        4. Un peu négatives

        5. Négatives

        6. Très négatives
    KeyboardComponent key_respProbe5
      allowedKeys = '1','2','3','4','5','6'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Fatigue
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    CodeComponent codeProbe6
      Code Type = Auto->JS
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      Begin Routine:
        thisExp.addData('Probe6',"Fatigue")
    TextComponent textProbe6
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      wrapWidth = 1.5
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      text:
        Notez votre vigilance juste avant l'interruption :

        1. Très alerte

        2. Alerte

        3. Un peu alerte

        4. Un peu fatigué-e

        5. Fatigué-e

        6. Très fatigué-e
    KeyboardComponent key_respProbe6
      allowedKeys = '1','2','3','4','5','6'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Motivation
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    CodeComponent codeProbe7
      Code Type = Auto->JS
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      Begin Routine:
        thisExp.addData('Probe7',"Motivation")
    TextComponent textProbe7
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      wrapWidth = 1.5
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      text:
        Globalement, comment-vous sentez vous ?

        1. Très motivé

        2. Motivé

        3. Un peu motivé

        4. Un peu démotivé

        5. Démotivé

        6. Très démotivé
    KeyboardComponent key_respProbe7
      allowedKeys = '1','2','3','4','5','6'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Pause_2
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  Routine Instru_Probes
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    TextComponent InstruProbes
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      wrapWidth = 1.5
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      text:
        De temps en temps, vous serez interrompu afin de comprendre votre état d'esprit - juste avant l'interruption.

        Des réponses vous seront alors proposées
        avec des chiffres avant (1., 2., ...)

        Appuyez alors sur la touche de votre clavier correspondant au chiffre de la réponse.

        Appuyez sur la barre d'espace pour continuer...
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Perception
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    CodeComponent codeProbe4
      Code Type = Auto->JS
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      Begin Routine:
        thisExp.addData('Probe4',"Perception")
    TextComponent textProbe4
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Comment qualifierez-vous votre perception de l'environnement ? :

        1. Très normale

        2. Assez normale

        3. Un peu normale

        4. Un peu hallucinatoire

        5. Assez hallucinatoire

        6. Très hallucinatoire
    KeyboardComponent key_resp_Probe4
      allowedKeys = '1','2','3','4','5','6'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Mindstate
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    CodeComponent codeProbe1
      Code Type = Auto->JS
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      Begin Experiment:
        ans_probe1 = [
        "J'étais concentré-e sur la tâche.",
        "J'étais distrait·e par quelque chose de relatif à la tâche.",
        "J'étais distrait·e par quelque chose dans la pièce.",
        "J'étais distrait·e par quelque chose de personnel, non relatif à la tâche.",
        "Je ne pensais à rien.",
        "J'ai oublié ce à quoi je pensais."
        ]
      Begin Routine:
        shuffle(ans_probe1)

        curransP1_0 = ans_probe1[0]
        curransP1_1 = ans_probe1[1]
        curransP1_2 = ans_probe1[2]
        curransP1_3 = ans_probe1[3]
        curransP1_4 = ans_probe1[4]
        curransP1_5 = ans_probe1[5]

        thisExp.addData('curr_ans0_P1', curransP1_0)
        thisExp.addData('curr_ans1_P1', curransP1_1)
        thisExp.addData('curr_ans2_P1', curransP1_2)
        thisExp.addData('curr_ans3_P1', curransP1_3)
        thisExp.addData('curr_ans4_p1', curransP1_4)
        thisExp.addData('curr_ans5_p1', curransP1_5)

        thisExp.addData('Probe1',"Mindstate")
    TextComponent textProbe1
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $"Choississez la réponse qui convient le mieux à votre état dans les quelques secondes avant l'interruption\nDans quel état étiez vous :" + "\n\n 1. " + curransP1_0 +"\n\n 2. " + curransP1_1 + "\n\n 3. " + curransP1_2 + "\n\n 4. " + curransP1_3 + "\n\n 5. " + curransP1_4  + "\n\n 6. " + curransP1_5
      wrapWidth = 1.5
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    KeyboardComponent key_respProbe1
      allowedKeys = '1', '2', '3', '4', '5', '6'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine CatchTrial
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    CodeComponent shufflecatch
      Code Type = Auto->JS
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      Begin Experiment:
        q_catch = ["Quelle est la capitale de la France ?", "4 + 4 = ?"]
        ans_catch = ["47","Londres","Paris","8"]
      Begin Routine:
        shuffle(q_catch)
        shuffle(ans_catch)

        curr_q_catch = q_catch[0]
        currans_0  = ans_catch[0]
        currans_1  = ans_catch[1]
        currans_2  = ans_catch[2]
        currans_3  = ans_catch[3]

        thisExp.addData('curr_q_catch', curr_q_catch)
        thisExp.addData('curr_ans0_catch', currans_0)
        thisExp.addData('curr_ans1_catch', currans_1)
        thisExp.addData('curr_ans2_catch', currans_2)
        thisExp.addData('curr_ans3_catch', currans_3)
    TextComponent text_catchtrial
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $curr_q_catch + "\n\n\n 1." + currans_0 + "\n\n 2. " + currans_1 + "\n\n 3. " +  currans_2  + "\n\n 4. " + currans_3
      wrapWidth = 1.5
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    KeyboardComponent key_respCatchTrial
      allowedKeys = '1', '2', '3', '4'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine SART_Parameters
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    CodeComponent SetUp_SART
      Code Type = Auto->JS
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      Begin Experiment:
        import numpy as np

        exp_Name = "SART_ALC_lastrun.py"
        #SART set-up for variables used in exp
        nBlock = 4
        nTrial = 24
        #duration of a block = 7min
        # durBlock = 420
        #duration of a trial between 30 and 70sec
        durTrial = [i for i in range (30,71)]
        doubledurTrial = [i for i in range (60, 141)]
        dur_Training = 27
        #duration of apparition of an image between
        # 1.00 and 1.5sec
        durImg = [i/100 for i in range (75,126)]

        #percentage of go vs nogo
        perGo = 0.8

        # Create digit list and is target or no
        go_digits = [1,2,4,5,6,7,8,9]
        nogo_digit = 3

        training_digits = []
        for i in range(dur_Training) :
            if i < perGo * dur_Training :
                training_digits.append(randchoice(go_digits))
            else :
                training_digits.append(nogo_digit)
        training_duration = [randchoice(durImg) for i in range(dur_Training)]
        training_order = [i for i in range(dur_Training)]
        shuffle(training_order)
  Routine DigitShuffle
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    CodeComponent Shuffle_Digit
      Code Type = Auto->JS
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      Begin Experiment:
        order_go_u = []
        order_go_i = []
        order_nogo = []
      Begin Routine:
        #create variable to pick randomly in lists
        order_full_list = []
        for i in range(len(imgName_list)):
            order_full_list.append(i)
        shuffle(order_full_list)

        #create training_list
        training_list_filename = []
        training_list_filetype = []
        training_list_istarget = []

        #pick file_name_type_isgo create list of 10 for training with 90% isgo = True
        #First create orders w/ only "Go" / "NoGo" images & shuffle

        for i in range(len(imgIstarget_list)):
            if imgIstarget_list[i] == 'Go' and imgType_list[i] == "upward" :
                order_go_u.append(i)
            elif imgIstarget_list[i] == "Go" and imgType_list[i] == "inverted" :
                order_go_i.append(i)
            elif imgIstarget_list[i] == 'NoGo' :
                order_nogo.append(i)
        shuffle(order_go_u)
        shuffle(order_go_i)
        shuffle(order_nogo)

        #Then fill training_lists
        order_training = []
        for i in range(dur_Training):
            order_training.append(i)
            if i <= ((perGo/2)*dur_Training):
                training_list_filename.append(imgName_list[order_go_u[i]])
                training_list_filetype.append(imgType_list[order_go_u[i]])
                training_list_istarget.append(imgIstarget_list[order_go_u[i]])
            elif ((perGo/2) * dur_Training) <= i <= (perGo * dur_Training):
                training_list_filename.append(imgName_list[order_go_i[i]])
                training_list_filetype.append(imgType_list[order_go_i[i]])
                training_list_istarget.append(imgIstarget_list[order_go_i[i]])
            else :
                training_list_filename.append(imgName_list[order_nogo[i]])
                training_list_filetype.append(imgType_list[order_nogo[i]])
                training_list_istarget.append(imgIstarget_list[order_nogo[i]])
        #Then duration of each img
        training_list_dur = []
        while len(training_list_dur) < dur_Training:
            training_list_dur.append(randchoice(durImg))

        curr_training_img = 0
        shuffle(order_training)
Flow
  Routine SART_Parameters
  Routine Instru1
  Routine Instru_Probes
  Routine Instru3
  Routine Pause
  LoopInitiator LoopTraining loopType="TrialHandler"
    loopType = sequential
    nReps = dur_Training
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    Routine TrainingTrial
    Routine FeedbackTraining
  LoopTerminator LoopTraining
  Routine StartExpe
  LoopInitiator LoopBlock loopType="TrialHandler"
    loopType = random
    nReps = nBlock
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    Routine SetBlock
    LoopInitiator LoopProbe loopType="TrialHandler"
      loopType = random
      nReps = nTrial
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      Routine Pause
      Routine SetTrial
      LoopInitiator LoopnTrial loopType="TrialHandler"
        loopType = sequential
        nReps = nDigits
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        Routine TrialBlock
      LoopTerminator LoopnTrial
      Routine Mindstate
      Routine Volition
      Routine Fatigue
    LoopTerminator LoopProbe
    Routine PauseBlockTrial
  LoopTerminator LoopBlock
  Routine EndScreen
